'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 2
' Initial_Processdelay           = 300000000
' Eventsource                    = External
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 5.0.8
' Optimize                       = Yes
' Optimize_Level                 = 1
' Info_Last_Save                 = DUTTLAB8  Duttlab8\Kai
'<Header End>
' TrialCounter.bas

#Include ADwinGoldII.inc


init:
  Cnt_Enable(0)
  Cnt_Clear(1)           ' Clear counter 1
  Cnt_Mode(1,8)          ' Counter input external
  Cnt_Enable(1)         ' enable counter 1



event:
  par_1 = Cnt_Read(1)
  Cnt_Clear(1)




finish:
  Cnt_Enable(0)
